PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = RetGoals_V1
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent welcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome, and thank you for agreeing to participate in our study!

        During this study, you will complete a series of tasks. There will be 4 tasks per block, and a total of 10 blocks. 5 of the blocks will be roughly 12 minutes each, and 5 of the blocks will be roughly 3 minutes each. Between each block, you will have a 30 second break. Halfway through the experiment, you will have a self-paced break, up to three minutes. If at any point you need to stop the experiment, please wait until the end of the current task, then ask the experimenter for assistance.

        Press the spacebar to continue.
    KeyboardComponent welcomeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen2
    TextComponent welcomeText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will first go through a set of practice trials to get the hang of each task. Before we begin, place the fingers of your dominant hand over the “1”, “2”, “3”, and “4” keys on the keyboard. Press any of the four keys to begin.
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    KeyboardComponent welcomeKey2
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EAPracticeInstructions
    TextComponent EAPracticeText1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Size Judgment Task
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    TextComponent EAPracticeText2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        For this task, you will see a set of shapes on screen. Some of the shapes will be large, and some of the shapes will be small. At the top of the screen, you will see an equation that reads “big _ small”. You will be prompted to fill in the symbol that makes the equation correct.

        Each of the symbols on the bottom of the screen corresponds to the four keys: ? is 1, > is 2, = is 3, and < is 4. If there are more big shapes than small shapes, the correct answer is > (press button “2”). If there are fewer big shapes than small shapes, the correct answer is < (press button “4”). If they are equal, the correct answer is = (press button “3”). If you cannot tell or are not confident, feel free to answer with ? (press button “1”).

        Press space to continue.
    TextComponent EAPracticeRespText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        ?     >      =      <
        1     2      3      4
    KeyboardComponent EAPracticeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EAPracticeInstructions2
    TextComponent EAPractice2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now practice the task without a time constraint. The shapes will appear on screen for 1.5 seconds, after which you will be able to make a response. Press 1 to begin.
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    KeyboardComponent EAPractice2Key
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EAStimLoader
    CodeComponent EALoaderCode
      Code Type = Auto->JS
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      Begin Experiment:
        ea_stim = []
        ea_stim_corr_keys = []
        ea_stim_magnitude = []
        ea_stim_spec = []
        ea_stim_big = []
      Begin Routine:
        ea_stim.append(stim_name)
        ea_stim_corr_keys.append(corr_key)
        ea_stim_magnitude.append(magnitude)
        ea_stim_spec.append(stim_spec)
        ea_stim_big.append(num_big)
  Routine EAPractice1
    CodeComponent EAPractice1Code
      Code Type = Py
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      Begin Experiment:
        EA_image_fp = ''
        EAPractice1_Feedback = ''
        EAPractice1_corrkey = ''
      Begin Routine:
        EA_image_fp = '/Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/ExAttn_stim/'
        EA_image_fp = os.path.join(EA_image_fp, ea_stim[shuffled_order[ea_stim_counter]])
        EAPractice1_corrkey = str(ea_stim_corr_keys[shuffled_order[ea_stim_counter]])
        thisExp.addData('corr_key', EAPractice1_corrkey)
        thisExp.addData('stim_name', ea_stim[shuffled_order[ea_stim_counter]])
        thisExp.addData('magnitude', ea_stim_magnitude[shuffled_order[ea_stim_counter]])
        thisExp.addData('stim_spec', ea_stim_spec[shuffled_order[ea_stim_counter]])
        thisExp.addData('num_big', ea_stim_big[shuffled_order[ea_stim_counter]])
        ea_stim_counter += 1
      End Routine:
        if EAPractice1Resp.keys == EAPractice1_corrkey:
            EAPractice1_Feedback = 'Well done!\n\nWe will now practice with a time constraint. The shapes will again appear on screen for 1.5 seconds, after which you will be able to make a response. You have a limited time to make a response, so be sure to be quick! Each trial will be separated by a blank screen with a cross at the center.\n\nPress 1 to begin.'
        else:
            EAPractice1_Feedback = 'Not quite, but you will have more practice now!\n\nThe next practice trials will have a time constraint. The shapes will again appear on screen for 1.5 seconds, after which you will be able to make a response. You have a limited time to make a response, so be sure to be quick! Each trial will be separated by a blank screen with a cross at the center.\n\nPress 1 to begin.'
    TextComponent EAPractice1Text1
      letterHeight = 0.075
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = big _ small
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    TextComponent EAPractice1Text2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1.5
      text [set every repeat] = ?     >     =     <
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    ImageComponent EAPractice1Stim
      image [set every repeat] = $EA_image_fp
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent EAPractice1Resp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $EAPractice1_corrkey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine EAPostPractice1
    TextComponent EAPostPractice1Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $EAPractice1_Feedback
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    KeyboardComponent EAPostPractice1Resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EAPracticeEnd
    TextComponent EAPracticeEndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Well Done! We'll now move on to the next set of task instructions and practice. Press 1 to continue.
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    KeyboardComponent EAPracticeEndKey
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EATaskInstructions
    CodeComponent Block1Counter
      Code Type = Auto->JS
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      Begin Experiment:
        block_counter = 0
      Begin Routine:
        block_counter += 1
    TextComponent EATaskInstructionsText1
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Size Judgment Task
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    TextComponent EATaskInstructionsText2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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      text:
        For this task, you will see a set of shapes on screen. Some of the shapes will be large, and some of the shapes will be small. At the top of the screen, you will see an equation that reads “big _ small”. You will be prompted to fill in the symbol that makes the equation correct (>, =, <).

        Remember, you have a limited time to make your response. Please try to make a response on each trial. If you are unsure of the answer, feel free to respond with ? (press button 1).

        The task will begin shortly.
  Routine EATrial
    CodeComponent EATrialCode
      Code Type = Py
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      Begin Experiment:
        EA_Feedback = ''
        EA_corrkey = ''
      Begin Routine:
        EA_image_fp = '/Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/ExAttn_stim/'
        EA_image_fp = os.path.join(EA_image_fp, ea_stim[shuffled_order[ea_stim_counter]])
        EA_corrkey = str(ea_stim_corr_keys[shuffled_order[ea_stim_counter]])
        thisExp.addData('corr_key', EA_corrkey)
        thisExp.addData('stim_name', ea_stim[shuffled_order[ea_stim_counter]])
        thisExp.addData('magnitude', ea_stim_magnitude[shuffled_order[ea_stim_counter]])
        thisExp.addData('stim_spec', ea_stim_spec[shuffled_order[ea_stim_counter]])
        thisExp.addData('num_big', ea_stim_big[shuffled_order[ea_stim_counter]])
        ea_stim_counter += 1
    TextComponent EATrialText1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = big _ small
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    TextComponent EATrialText2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = ?     >     =     <
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    ImageComponent EATrialStim
      image [set every repeat] = $EA_image_fp
      size = (0.8, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent EATrialResp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $EA_corrkey
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine ISI
    TextComponent FixCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Block1End
    CodeComponent Block1EndCode
      Code Type = Auto->JS
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      Begin Experiment:
        block1endtext = ''
      Begin Routine:
        if block_counter < 5:
            block1endtext = 'You have finished this block! You will now have a brief 30 second break before the beginning of the next one. Feel free to stretch out, but please do not use any technology or leave the testing room.'
        elif block_counter == 5:
            block1endtext = 'You have finished the first set of blocks! You will now have a self-paced break before the start of the next block, up to three minutes long. Please refrain from using technology during the break. The second set of blocks will take approximately 15 minutes to complete.'
    TextComponent Block1EndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text [set every repeat] = $block1endtext
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  Routine Block2Break
    CodeComponent Block2BreakCode
      Code Type = Auto->JS
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      Begin Routine:
        block_counter = 0
    TextComponent Block2BreakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished the first set of blocks! You will now have a self-paced break before the start of the next block, up to three minutes long. Please refrain from using technology during the break. The second set of blocks will take approximately 15 minutes to complete.

        Press 1 when you are ready to begin.
    KeyboardComponent Block2BreakKey
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block2End
    CodeComponent Block2EndCode
      Code Type = Auto->JS
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      Begin Experiment:
        block2endtext = ''
      Begin Routine:
        if block_counter < 5:
            block2endtext = 'You have finished this block! You will now have a brief 30 second break before the beginning of the next one. Feel free to stretch out, but please do not use any technology or leave the testing room.'
        elif block_counter == 5:
            block2endtext = 'Congratulations! You have finished the experiment. Please let the experimenter know that you are finished. Thanks for participating!'
    TextComponent Block2EndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text [set every repeat] = $block2endtext
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  Routine EncStimLoader
    CodeComponent EAStimLoaderCode
      Code Type = Auto->JS
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      Begin Experiment:
        enc_stim = []
        enc_stim_corr_keys = []
        enc_stim_spec = []
      Begin Routine:
        enc_stim.append(stim_name)
        enc_stim_corr_keys.append(corr_key)
        enc_stim_spec.append(stim_spec)
  Routine EncStimShuffle
    CodeComponent EncStimLoaderCode
      Code Type = Auto->JS
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      Begin Experiment:
        enc_stim_counter = 0
  Routine IAStimLoader
    CodeComponent IAStimLoaderCode
      Code Type = Auto->JS
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      Begin Experiment:
        ia_stim = []
        ia_stim_corr_keys = []
        ia_stim_spec = []
        ia_stim_magnitude = []
        ia_stim_hasneg = []
      Begin Routine:
        ia_stim.append(stim_name)
        ia_stim_corr_keys.append(corr_key)
        ia_stim_spec.append(stim_spec)
        ia_stim_magnitude.append(magnitude)
        ia_stim_hasneg.append(has_neg_ans)
  Routine IAStimShuffle
  Routine RetStimShuffle
  Routine StimShuffle
    CodeComponent ShuffleCode
      Code Type = Auto->JS
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      Begin Experiment:
        ea_stim_counter = 0
        enc_stim_counter = 0
        ia_stim_counter = 0
        ret_stim_counter = 0
        shuffled_order = list(range(300))
        ret_shuf_prac = []
        ret_shuf1 = []
        ret_shuf2 = []
        ret_shuf3 = []
        ret_shuf4 = []
        ret_shuf5 = []
        ret_shuf6 = []
        ret_shuf7 = []
        ret_shuf8 = []
        ret_shuf9 = []
        ret_shuf10 = []
      Begin Routine:
        shuffle(shuffled_order)
        ret_shuf_prac = shuffled_order[0:5]
        shuffle(ret_shuf_prac)
        ret_shuf1 = shuffled_order[5:45]
        shuffle(ret_shuf1)
        ret_shuf2 = shuffled_order[45:85]
        shuffle(ret_shuf2)
        ret_shuf3 = shuffled_order[85:125]
        shuffle(ret_shuf3)
        ret_shuf4 = shuffled_order[125:165]
        shuffle(ret_shuf4)
        ret_shuf5 = shuffled_order[165:205]
        shuffle(ret_shuf5)
        ret_shuf6 = shuffled_order[205:215]
        shuffle(ret_shuf6)
        ret_shuf7 = shuffled_order[215:225]
        shuffle(ret_shuf7)
        ret_shuf8 = shuffled_order[225:235]
        shuffle(ret_shuf8)
        ret_shuf9 = shuffled_order[235:245]
        shuffle(ret_shuf9)
        ret_shuf10 = shuffled_order[245:255]
        shuffle(ret_shuf10)
        ret_shuffled_order = ret_shuf_prac + ret_shuf1 + ret_shuf2 + ret_shuf3 + ret_shuf4 + ret_shuf5 + ret_shuf6 + ret_shuf7 + ret_shuf8 + ret_shuf9 + ret_shuf10
  Routine IAPracticeInstructions
    TextComponent IAPracticeInstructions1Text1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Arithmetic Task
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    TextComponent IAPracticeInstructions1Text2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        For this task, you will see a set of math problems on screen, one on the left and one on the right. The blank space in the middle is the symbol that makes the equation correct. You will be prompted to fill in the symbol that makes the equation correct.

        Each of the symbols on the bottom of the screen corresponds to the four keys: ? is 1, > is 2, = is 3, and < is 4. If the answer to the equation on the left is greater than the answer to the equation on the right, the correct answer is > (press button “2”). If the answer to the equation on the left is less than the answer to the equation on the right, the correct answer is < (press button “4”). If they are equal, the correct answer is = (press button “3”). If you cannot tell or are not confident, feel free to answer with ? (press button “1”).

        Press space to continue.
    TextComponent IAPracticeInstructions1RespText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        ?     >      =      <
        1     2      3      4
    KeyboardComponent IAPracticeInstructions1Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IAPracticeInstructions2
    TextComponent IAPracticeInstructions2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now practice the task without a time constraint. The problems will appear on screen for 1.5 seconds, after which you will be able to make a response. Press 1 to begin.
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    KeyboardComponent IAPracticeInstructions2Resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IAPractice1
    CodeComponent IAPractice1Code
      Code Type = Py
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      Begin Experiment:
        IA_image_fp = ''
        IAPractice1_Feedback = ''
        IAPractice1_corrkey = ''
      Begin Routine:
        IA_image_fp = '/Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/IntAttn_stim/'
        IA_image_fp = os.path.join(IA_image_fp, ia_stim[shuffled_order[ia_stim_counter]])
        IAPractice1_corrkey = str(ia_stim_corr_keys[shuffled_order[ia_stim_counter]])
        thisExp.addData('corr_key', IAPractice1_corrkey)
        thisExp.addData('stim_name', ia_stim[shuffled_order[ia_stim_counter]])
        thisExp.addData('magnitude', ia_stim_magnitude[shuffled_order[ia_stim_counter]])
        thisExp.addData('stim_spec', ia_stim_spec[shuffled_order[ia_stim_counter]])
        thisExp.addData('has_neg', ia_stim_hasneg[shuffled_order[ia_stim_counter]])
        ia_stim_counter += 1
      End Routine:
        if IAPractice1Resp.keys == IAPractice1_corrkey:
            IAPractice1_Feedback = 'Well done!\n\nWe will now practice with a time constraint. The equations will again appear on screen for 1.5 seconds, after which you will be able to make a response. You have a limited time to make a response, so be sure to be quick! Each trial will be separated by a blank screen with a cross at the center.\n\nPress 1 to begin.'
        else:
            EAPractice1_Feedback = 'Not quite, but you will have more practice now!\n\nThe next practice trials will have a time constraint. The equations will again appear on screen for 1.5 seconds, after which you will be able to make a response. You have a limited time to make a response, so be sure to be quick! Each trial will be separated by a blank screen with a cross at the center.\n\nPress 1 to begin.'
    TextComponent IAPractice1Text1
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1.5
      text [set every repeat] = ?     >     =     <
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    ImageComponent IAPractice1Stim
      image [set every repeat] = $IA_image_fp
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent IAPractice1Resp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $IAPractice1_corrkey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine RetStimLoader
    CodeComponent RetStimLoaderCode
      Code Type = Auto->JS
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      Begin Experiment:
        ret_stim = []
        ret_enc_stimname = []
        ret_stim_corr_keys = []
        ret_stim_spec = []
      Begin Routine:
        ret_stim.append(stim_name)
        ret_enc_stimname.append(enc_stimname)
        ret_stim_corr_keys.append(corr_key)
        ret_stim_spec.append(stim_spec)
  Routine IAPostPractice1
    TextComponent IAPractice1Feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $IAPractice1_Feedback
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    KeyboardComponent IAPostPractice1Resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IATrial
    CodeComponent IATrialCode
      Code Type = Py
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      Begin Experiment:
        IA_corrkey = ''
      Begin Routine:
        IA_image_fp = '/Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/IntAttn_stim/'
        IA_image_fp = os.path.join(IA_image_fp, ia_stim[shuffled_order[ia_stim_counter]])
        IA_corrkey = str(ia_stim_corr_keys[shuffled_order[ia_stim_counter]])
        thisExp.addData('corr_key', IA_corrkey)
        thisExp.addData('stim_name', ia_stim[shuffled_order[ia_stim_counter]])
        thisExp.addData('magnitude', ia_stim_magnitude[shuffled_order[ia_stim_counter]])
        thisExp.addData('stim_spec', ia_stim_spec[shuffled_order[ia_stim_counter]])
        thisExp.addData('has_neg', ia_stim_hasneg[shuffled_order[ia_stim_counter]])
        ia_stim_counter += 1
    TextComponent IATrialRespText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = ?     >     =     <
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    ImageComponent IATrialStim
      image [set every repeat] = $IA_image_fp
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent IATrialResp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $IA_corrkey
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine IAPracticeEnd
    TextComponent IAPracticeEndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Well Done! We'll now move on to the next set of task instructions and practice. Press 1 to continue.
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    KeyboardComponent IAPracticeEndResp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EncPracticeInstructions
    TextComponent EncPracticeInstructionsText1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Comparison & Learning Task
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    TextComponent EncPracticeInstructionsText2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        For this task, you will see two pictures on screen. The pictures on the left will randomly repeat throughout the experiment, but the pictures on the right will always be new.

        Your job is to study the two images. You will be asked to remember which images were shown together in a subsequent task.

        To help you remember, you will also make a judgment about the size of the objects in relation to one another. This will help you form an association between the objects.

        Please make the judgment based off of the size of the image on screen, not the size of these objects in the real world. If the image on the left is larger than the image on the right, the correct answer is > (press button “2”). If the image on the left is smaller than the image on the right, the correct answer is < (press button “4”). If they are equal, the correct answer is = (press button “3”). If you cannot tell or are not confident, feel free to answer with ? (press button “1”).

        Remember, your memory for these items will be tested later, so be sure to pay attention!

        Press space to continue.
    TextComponent EncPracticeInstructionsRespText
      letterHeight = 0.05
      pos = (0,-0.4)
      startVal [time (s)] = 0.0
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      text:
        ?     >      =      <
        1     2      3      4
    KeyboardComponent EncPracticeInstructionsResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EncPracticeInstructions2
    TextComponent EncPracticeInstructions2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now practice the task without a time constraint. The images will appear on screen for 1.5 seconds, after which you will be able to make a response. Press 1 to begin.
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    KeyboardComponent EncPracticeInstructions2Resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EncPractice1
    CodeComponent EncPractice1Code
      Code Type = Py
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      Begin Experiment:
        Enc_image_fp = ''
        EncPractice1_Feedback = ''
        EncPractice1_corrkey = ''
      Begin Routine:
        Enc_image_fp = '/Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Enc_stim/'
        Enc_image_fp = os.path.join(Enc_image_fp, enc_stim[shuffled_order[enc_stim_counter]])
        EncPractice1_corrkey = str(enc_stim_corr_keys[shuffled_order[enc_stim_counter]])
        thisExp.addData('corr_key', EncPractice1_corrkey)
        thisExp.addData('stim_name', enc_stim[shuffled_order[enc_stim_counter]])
        thisExp.addData('stim_spec', enc_stim_spec[shuffled_order[enc_stim_counter]])
        enc_stim_counter += 1
      End Routine:
        if EncPractice1Resp.keys == EncPractice1_corrkey:
            EncPractice1_Feedback = 'Well done!\n\nWe will now practice with a time constraint. The images will again appear on screen for 1.5 seconds, after which you will be able to make a response. You have a limited time to make a response, so be sure to be quick! Unlike the other tasks, there will be a short delay between when you make a button press and when the trial ends. Please try to only press one key during the response time. Remember, make your judgment based on the size of the items on the screen, not the size of the items in the real world. Each trial will be separated by a blank screen with a cross at the center.\n\nPress 1 to begin.'
        else:
            EncPractice1_Feedback = 'Not quite, but you will have more practice now!\n\nThe next practice trials will have a time constraint. The equations will again appear on screen for 1.5 seconds, after which you will be able to make a response. You have a limited time to make a response, so be sure to be quick! Unlike the other tasks, there will be a short delay between when you make a button press and when the trial ends. Please try to only press one key during the response time. Remember, make your judgment based on the size of the items on the screen, not the size of the items in the real world. Each trial will be separated by a blank screen with a cross at the center.\n\nPress 1 to begin.'
    KeyboardComponent EncPractice1Resp
      allowedKeys [set every repeat] = '1', '2', '3', '4'
      correctAns = $EncPractice1_corrkey
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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    ImageComponent EncPractice1Stim
      image [set every repeat] = $Enc_image_fp
      size = (1.0, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent EncPractice1RespText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1.5
      text [set every repeat] = ?     >     =     <
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  Routine EAPostPractice1_2
  Routine EncPostPractice1
    TextComponent EncPractice1Feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $EncPractice1_Feedback
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    KeyboardComponent EncPractice1FeedbackResp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EncTrial
    CodeComponent EncTrialCode
      Code Type = Py
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      Begin Experiment:
        Enc_corrkey = ''
      Begin Routine:
        Enc_image_fp = '/Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Enc_stim/'
        Enc_image_fp = os.path.join(Enc_image_fp, enc_stim[shuffled_order[enc_stim_counter]])
        Enc_corrkey = str(enc_stim_corr_keys[shuffled_order[enc_stim_counter]])
        thisExp.addData('corr_key', Enc_corrkey)
        thisExp.addData('stim_name', enc_stim[shuffled_order[enc_stim_counter]])
        thisExp.addData('stim_spec', enc_stim_spec[shuffled_order[enc_stim_counter]])
        enc_stim_counter += 1
    ImageComponent EncImage
      image [set every repeat] = $Enc_image_fp
      size = (1.0, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent EncTrialRespText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = ?     >     =     <
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    KeyboardComponent EncTrialResp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $Enc_corrkey
      forceEndRoutine = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine EncPracticeEnd
    TextComponent EncPracticeEndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Well Done! We'll now move on to the next set of task instructions and practice. Press 1 to continue.
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    KeyboardComponent EncPracticeEndResp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RetPracticeInstructions
    TextComponent RetPracticeInstructionsText1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Memory Task
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    TextComponent RetPracticeInstructionsText2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        For this task, your memory for the images shown during the learning task will be tested. You will see one image on screen, and you will be asked which of the images at the bottom of the screen was previously shown with it.

        If you think the image was shown with the berries,  press button “2”. If you think the image was shown with the truck,  press button “3”. If you think the image was shown with the house,  press button “4”. If you cannot tell or are not confident, feel free to answer with ? (press button “1”).

        Press space to continue.
    KeyboardComponent RetPracticeInstructionsResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent RetPracticeInstructions1Berry
      image = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/fruit.jpeg
      pos = (-0.125, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent RetPracticeInstructions1Question
      letterHeight = 0.065
      pos = (-0.375, -0.35)
      startVal [time (s)] = 0.0
      text = ?
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    ImageComponent RetPracticeInstructions1Truck
      image = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/vehicle.jpg
      pos = (0.125, -0.35)
      size = (0.15, 0.15)
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    ImageComponent RetPracticeInstructions1House
      image = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/building.jpg
      pos = (0.375, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent RetPracticeInstructionsNumGuide1
      letterHeight = 0.05
      pos = (-0.375, -0.45)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent RetPracticeInstructionsNumGuide2
      letterHeight = 0.05
      pos = (-0.125, -0.45)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent RetPracticeInstructionsNumGuide3
      letterHeight = 0.05
      pos = (0.125, -0.45)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent RetPracticeInstructionsNumGuide4
      letterHeight = 0.05
      pos = (0.375, -0.45)
      startVal [time (s)] = 0.0
      text = 4
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  Routine RetPracticeInstructions2
    TextComponent RetPracticeInstructions2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now practice the task without a time constraint. An image will appear on screen for 1.5 seconds, after which you will be able to make a response. Press 1 to begin.
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    KeyboardComponent RetPracticeInstructions2Resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RetPractice1
    CodeComponent RetPractice1Code
      Code Type = Py
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      Begin Experiment:
        Ret_image_fp = ''
        RetPractice1_Feedback = ''
        RetPractice1_corrkey = ''
      Begin Routine:
        Ret_image_fp = '/Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Ret_stim/'
        Ret_image_fp = os.path.join(Ret_image_fp, ret_stim[ret_shuffled_order[ret_stim_counter]])
        RetPractice1_corrkey = str(ret_stim_corr_keys[ret_shuffled_order[ret_stim_counter]])
        thisExp.addData('corr_key', RetPractice1_corrkey)
        thisExp.addData('stim_name', ret_stim[ret_shuffled_order[ret_stim_counter]])
        thisExp.addData('stim_spec', ret_stim_spec[ret_shuffled_order[ret_stim_counter]])
        thisExp.addData('enc_stimname', ret_enc_stimname[ret_shuffled_order[ret_stim_counter]])
        ret_stim_counter += 1
      End Routine:
        if RetPractice1Resp.keys == RetPractice1_corrkey:
            RetPractice1_Feedback = 'Well done!\n\nWe will now practice with a time constraint. The image will again appear on screen for 1.5 seconds, after which you will be able to make a response. You have a limited time to make a response, so be sure to be quick! Each trial will be separated by a blank screen with a cross at the center.\n\nPress 1 to begin.'
        else:
            RetPractice1_Feedback = 'Not quite, but you will have more practice now!\n\nThe next practice trials will have a time constraint. The equations will again appear on screen for 1.5 seconds, after which you will be able to make a response. You have a limited time to make a response, so be sure to be quick! Each trial will be separated by a blank screen with a cross at the center.\n\nPress 1 to begin.'
    ImageComponent RetPractice1Stim
      image [set every repeat] = $Ret_image_fp
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent RetPractice1Resp
      allowedKeys [set every repeat] = '1', '2', '3', '4'
      correctAns = $RetPractice1_corrkey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent RetPractice1Berry
      image [set every repeat] = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/fruit.jpeg
      pos = (-0.125, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 1.5
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    TextComponent RetPractice1Question
      letterHeight = 0.065
      pos = (-0.375, -0.35)
      startVal [time (s)] = 1.5
      text [set every repeat] = ?
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    ImageComponent RetPractice1Truck
      image [set every repeat] = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/vehicle.jpg
      pos = (0.125, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 1.5
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    ImageComponent RetPractice1House
      image [set every repeat] = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/building.jpg
      pos = (0.375, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 1.5
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  Routine RetPostPractice1
    TextComponent RetPostPractice1Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $RetPractice1_Feedback
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    KeyboardComponent RetPostPractice1Resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RetTrial
    CodeComponent RetTrialCode
      Code Type = Py
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      Begin Experiment:
        Ret_corrkey = ''
      Begin Routine:
        Ret_image_fp = '/Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Ret_stim/'
        Ret_image_fp = os.path.join(Ret_image_fp, ret_stim[ret_shuffled_order[ret_stim_counter]])
        Ret_corrkey = str(ret_stim_corr_keys[ret_shuffled_order[ret_stim_counter]])
        thisExp.addData('corr_key', Ret_corrkey)
        thisExp.addData('stim_name', ret_stim[ret_shuffled_order[ret_stim_counter]])
        thisExp.addData('stim_spec', ret_stim_spec[ret_shuffled_order[ret_stim_counter]])
        thisExp.addData('enc_stimname', ret_enc_stimname[ret_shuffled_order[ret_stim_counter]])
        ret_stim_counter += 1
    ImageComponent RetTrialStim
      image [set every repeat] = $Ret_image_fp
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent RetTrialResp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $Ret_corrkey
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent RetTrialQuestion
      letterHeight = 0.065
      pos = (-0.375, -0.35)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = ?
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    ImageComponent RetTrialBerry
      image [set every repeat] = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/fruit.jpeg
      pos = (-0.125, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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    ImageComponent RetTrialTruck
      image [set every repeat] = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/vehicle.jpg
      pos = (0.125, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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    ImageComponent RetTrialHouse
      image [set every repeat] = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Repeating_Ret_Stim/building.jpg
      pos = (0.375, -0.35)
      size = (0.15, 0.15)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
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  Routine RetPracticeEnd
    TextComponent RetPracticeEndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Well Done!

        You're now ready to begin the study. If you have any questions, please ask the experimenter now. Please make sure that your cell phone is turned off and put away. If you need to use the washroom, please do so now.

        Press 1 to begin the study.
    KeyboardComponent RetPracticeEndResp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EncTaskInstructions
    TextComponent EncTaskInstructionsText1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text [set every repeat] = Learning & Comparison Task
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    TextComponent EncTaskInstructionsText2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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      text:
        For this task, you will see two pictures on screen. Your job is to study the two images. You will be asked to remember which images were shown together in a subsequent task.

        To help you remember, you will also make a judgment about the size of the objects in relation to one another (>, =, <). Please make the judgment based off of the size of the image on screen, not the size of these objects in the real world. If you cannot tell or are not confident, feel free to answer with ? (press button “1”).

        Remember, your memory for these items will be tested later, so be sure to pay attention!

        The task will begin shortly.
  Routine IATaskInstructions
    TextComponent IATaskInstructionsText1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Arithmetic Task
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    TextComponent IATaskInstructionsText2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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      text:
        For this task, you will see a set of math problems on screen, one on the left and one on the right. The blank space in the middle is the symbol that makes the equation correct. You will be prompted to fill in the symbol that makes the equation correct (>, =, <). Please try to make a response on every trial. If you cannot tell or are not confident, feel free to answer with ? (press button “1”).

        The task will begin shortly.
  Routine RetTaskInstructions
    TextComponent RetTaskInstructionsText1
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Memory Task
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    TextComponent RetTaskInstructionsText2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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      text:
        For this task, your memory for the images shown during the learning task will be tested. You will see one image on screen, and you will be asked which of the images at the bottom of the screen was previously shown with it (berries, truck, house). Please try to make a response on every trial. If you cannot tell or are not confident, feel free to answer with ? (press button “1”).

        The task will begin shortly.
Flow
  LoopInitiator EALoadLoop loopType="TrialHandler"
    conditionsFile = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/ExAttn_sheet.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stim_name': 'ExAttn_stim.001.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 6, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.002.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 6, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.003.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 6, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.004.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 7, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.005.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 7, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.006.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 7, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.007.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 7, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.008.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 8, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.009.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 8, 'magnitude': 1},
      {'stim_name': 'ExAttn_stim.010.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 8, 'magnitude': 2},
      {'stim_name': 'ExAttn_stim.011.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 7, 'magnitude': 2},
      {'stim_name': 'ExAttn_stim.012.jpeg', 'stim_spec': 'circles', 'corr_ans': '>', 'corr_key': 2, 'num_big': 7, 'magnitude': 2}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
    Routine EAStimLoader
  LoopTerminator EALoadLoop
  LoopInitiator EncLoadLoop loopType="TrialHandler"
    conditionsFile = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Enc_sheet.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stim_name': 'Encod_Stim.001.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.002.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.003.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.004.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.005.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.006.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.007.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.008.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.009.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.010.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.011.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.012.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.013.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.014.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.015.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2},
      {'stim_name': 'Encod_Stim.016.jpeg', 'stim_spec': 'building', 'corr_ans': '>', 'corr_key': 2}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
    Routine EncStimLoader
  LoopTerminator EncLoadLoop
  LoopInitiator IALoadLoop loopType="TrialHandler"
    conditionsFile = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Int_sheet.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stim_name': 'InternTask.001.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 1, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.002.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 9, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.003.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 5, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.004.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 6, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.005.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 4, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.006.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 1, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.007.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 6, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.008.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 2, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.009.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 4, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.010.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 4, 'has_neg_ans': 0},
      {'stim_name': 'InternTask.011.jpeg', 'stim_spec': 'addadd', 'corr_ans': '>', 'corr_key': 2, 'magnitude': 3, 'has_neg_ans': 0}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
    Routine IAStimLoader
  LoopTerminator IALoadLoop
  LoopInitiator RetLoadLoop loopType="TrialHandler"
    conditionsFile = /Users/matthewdougherty/Desktop/Projects/RetGoals_Git/Stimuli/Ret_sheet.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'enc_stimname': 'Encod_Stim.001.jpeg', 'stim_name': '1_1.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.002.jpeg', 'stim_name': '1_2.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.003.jpeg', 'stim_name': '1_3.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.004.jpeg', 'stim_name': '1_4.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.005.jpeg', 'stim_name': '1_5.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.006.jpeg', 'stim_name': '1_6.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.007.jpeg', 'stim_name': '1_7.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.008.jpeg', 'stim_name': '1_8.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.009.jpeg', 'stim_name': '1_9.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.010.jpeg', 'stim_name': '1_10.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.011.jpeg', 'stim_name': '1_11.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.012.jpeg', 'stim_name': '1_12.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.013.jpeg', 'stim_name': '1_13.jpg', 'stim_spec': 'building', 'corr_key': 3},
      {'enc_stimname': 'Encod_Stim.014.jpeg', 'stim_name': '1_14.jpg', 'stim_spec': 'building', 'corr_key': 3}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
    Routine RetStimLoader
  LoopTerminator RetLoadLoop
  Routine StimShuffle
  Routine WelcomeScreen
  Routine WelcomeScreen2
  Routine EAPracticeInstructions
  Routine EAPracticeInstructions2
  Routine EAPractice1
  Routine EAPostPractice1
  LoopInitiator EAPractice2Trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine ISI
    Routine EATrial
  LoopTerminator EAPractice2Trials
  Routine EAPracticeEnd
  Routine IAPracticeInstructions
  Routine IAPracticeInstructions2
  Routine IAPractice1
  Routine IAPostPractice1
  LoopInitiator IAPractice2Trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine ISI
    Routine IATrial
  LoopTerminator IAPractice2Trials
  Routine IAPracticeEnd
  Routine EncPracticeInstructions
  Routine EncPracticeInstructions2
  Routine EncPractice1
  Routine EncPostPractice1
  LoopInitiator EncPractice2Trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine ISI
    Routine EncTrial
  LoopTerminator EncPractice2Trials
  Routine EncPracticeEnd
  Routine RetPracticeInstructions
  Routine RetPracticeInstructions2
  Routine RetPractice1
  Routine RetPostPractice1
  LoopInitiator RetPractice2Trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine ISI
    Routine RetTrial
  LoopTerminator RetPractice2Trials
  Routine RetPracticeEnd
  LoopInitiator Blocks40 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine EATaskInstructions
    LoopInitiator EATrialsBlocks40 loopType="TrialHandler"
      loopType = sequential
      nReps = 40
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      Routine ISI
      Routine EATrial
    LoopTerminator EATrialsBlocks40
    Routine EncTaskInstructions
    LoopInitiator EncTrialsBlocks40 loopType="TrialHandler"
      loopType = sequential
      nReps = 40
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      Routine ISI
      Routine EncTrial
    LoopTerminator EncTrialsBlocks40
    Routine IATaskInstructions
    LoopInitiator IATrialsBlocks40 loopType="TrialHandler"
      loopType = sequential
      nReps = 40
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      Routine ISI
      Routine IATrial
    LoopTerminator IATrialsBlocks40
    Routine RetTaskInstructions
    LoopInitiator RetTrialsBlocks40 loopType="TrialHandler"
      loopType = sequential
      nReps = 40
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      Routine ISI
      Routine RetTrial
    LoopTerminator RetTrialsBlocks40
    Routine Block1End
  LoopTerminator Blocks40
  Routine Block2Break
  LoopInitiator Blocks10 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine EATaskInstructions
    LoopInitiator EATrialsBlocks10 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine ISI
      Routine EATrial
    LoopTerminator EATrialsBlocks10
    Routine EncTaskInstructions
    LoopInitiator EncTrialsBlocks10 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine ISI
      Routine EncTrial
    LoopTerminator EncTrialsBlocks10
    Routine IATaskInstructions
    LoopInitiator IATrialsBlocks10 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine ISI
      Routine IATrial
    LoopTerminator IATrialsBlocks10
    Routine RetTaskInstructions
    LoopInitiator RetTrialsBlocks10 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine ISI
      Routine RetTrial
    LoopTerminator RetTrialsBlocks10
    Routine Block2End
  LoopTerminator Blocks10
